PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [640, 360]
  color = 1.0000, 0.9843, 0.7412
  expName = Graz
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    ImageComponent image
      image = line-art-attention-icon-or-symbol-vector.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Attention
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    ImageComponent attention_cross
      image = stims/cross.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent lsl_send_attention
      Code Type = Py
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      Begin Routine:
        # Attention (Begin Routine)
        send_mark_label('ATTENTION', 'ATTENTION')
  Routine Baseline
    RoutineSettingsComponent Baseline
      stopVal [duration (s)] = 3
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    CodeComponent lsl_send_baseline
      Code Type = Py
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      Begin Routine:
        # Baseline (Begin Routine)
        send_mark_label('BASELINE', 'BASELINE')
  Routine Stim
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    ImageComponent motor_cue
      image [set every repeat] = $img
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
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    CodeComponent lsl_send_stim
      Code Type = Py
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      Begin Routine:
        # event_label vem do CSV na linha atual (p.ex., 'LEFT_MI_STIM' ou 'RIGHT_MI_STIM')
        # Image component da rotina deve estar com Image: $img (do CSV) e "Set every repeat".
        send_mark_label(event_label, tag='STIM')
  Routine Attempt
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    ImageComponent attempt
      image = stims/cross.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.75
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    CodeComponent lsl_send_attempt
      Code Type = Py
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      Begin Routine:
        # Attempt (Begin Routine)
        send_mark_label('ATTEMPT', 'ATTEMPT')
  Routine Rest
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    CodeComponent lsl_send_rest
      Code Type = Py
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      Begin Routine:
        # Rest (Begin Routine)
        send_mark_label('REST', 'REST')
    ImageComponent image_2
      durationEstim = 2
      image = stims/rest.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Start_LSL
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    CodeComponent start_lsl
      Code Type = Py
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet, local_clock
        import json

        # Stream LSL (int32, assíncrono)
        info   = StreamInfo('GrazMI_Markers', 'Markers', 1, 0, 'int32', 'GrazMI')
        outlet = StreamOutlet(info)

        # Mapa Graz
        code_map = {
            'BASELINE':1, 'ATTENTION':2, 'LEFT_MI_STIM':3,
            'RIGHT_MI_STIM':4, 'ATTEMPT':5, 'REST':6, 'BLOCK_END':99
        }

        def _resolve_code(label):
            k = str(label).strip().upper()
            if k not in code_map:
                raise RuntimeError(f"event_label '{label}' não mapeado em code_map.")
            return code_map[k]

        def _now_times():
            # tempos no instante do flip
            try:
                t_glob = globalClock.getTime()     # relógio do PsychoPy
            except Exception:
                from psychopy import core as _core
                t_glob = _core.getTime()
            t_lsl = local_clock()                  # relógio do LSL
            return t_glob, t_lsl

        def send_mark_label(label, tag=''):
            """Agenda envio do marcador (derivado de event_label) no próximo flip."""
            code = _resolve_code(label)
            def _do():
                t_glob, t_lsl = _now_times()
                outlet.push_sample([int(code)], timestamp=t_lsl)
                # log opcional em colunas (útil p/ depurar/sincronizar)
                thisExp.addData(f'{(tag or label)}_code',  int(code))
                thisExp.addData(f'{(tag or label)}_tGlob', t_glob)
                thisExp.addData(f'{(tag or label)}_tLSL',  t_lsl)
            win.callOnFlip(_do)

        def send_mark_code(code, tag=''):
            """Versão direta por código inteiro, se precisar em rotinas fixas."""
            def _do():
                t_glob, t_lsl = _now_times()
                outlet.push_sample([int(code)], timestamp=t_lsl)
                thisExp.addData(f'{(tag or code)}_code',  int(code))
                thisExp.addData(f'{(tag or code)}_tGlob', t_glob)
                thisExp.addData(f'{(tag or code)}_tLSL',  t_lsl)
            win.callOnFlip(_do)
  Routine End
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        send_mark_label('BLOCK_END', 'BLOCK_END')
Flow
  Routine Start_LSL
  Routine Baseline
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stims_sequence.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\left_hand.png'), ('event_label', 'LEFT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\left_hand.png'), ('event_label', 'LEFT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\left_hand.png'), ('event_label', 'LEFT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\left_hand.png'), ('event_label', 'LEFT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\left_hand.png'), ('event_label', 'LEFT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\right_hand.png'), ('event_label', 'RIGHT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\right_hand.png'), ('event_label', 'RIGHT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\right_hand.png'), ('event_label', 'RIGHT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\right_hand.png'), ('event_label', 'RIGHT_MI_STIM')]),
      OrderedDict([('img', 'C:\\Users\\User\\Documents\\GitHub\\real_time_bci\\stims\\right_hand.png'), ('event_label', 'RIGHT_MI_STIM')])]
    Routine Attention
    Routine Stim
    Routine Attempt
    Routine Rest
  LoopTerminator trials
  Routine End
